---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Colour-shape switching task - A- 2"
set subject_parity even
set subject_nr 0
set start experiment_switch_A_2
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 32
set font_italic no
set font_family "Century Gothic"
set font_bold no
set experiment_path "Y:\\staff\\umc\\NIC\\LANGCOG\\Team Folder\\Study\\Vragenlijsten & Taken\\Taken\\Colour-shape switching task"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background "#f1f1f1"

define inline_script colour_block_experimental_determine_response
	set description "Executes Python code"
	___run__
	# Get response
	var.response, t1 = kb.get_key()
	
	
	# Determine the correct response, dependend on the target shape that is just shown
	if var.target_colour == 'red':
		var.correct_response = var.response_red
	else:
		var.correct_response = var.response_green
	
	
	# Add 1 to total responses, this variable is necessary to later calculate the average accuracy and average response time. 
	var.total_responses += 1
	
	# Give value 1 to the correct variable if a correct response was made and a value 0 if no or no correct response was made.
	if var.response == var.correct_response:
		var.correct = 1
		var.total_correct += 1
	else:
		var.correct = 0
	
	
	# RECORDING OF VARIABLES
	# Calculate the response time of the single trial.
	var.response_time = t1-t0
	
	# Calculate the total response time over all trials (needed to later calculate the average response time).
	var.total_response_time += var.response_time
	
	# Calculate the average response time for this block.
	var.avg_rt = var.total_response_time / var.total_responses
	var.average_response_time = var.avg_rt
		
	# Calculate the accuracy for this block.	
	var.acc = 100. * var.total_correct / var.total_responses	
	var.accuracy = var.acc
	
	
	# Write all variables to the log file
	#log.write_vars()
	__end__
	set _prepare ""

define inline_script colour_block_experimental_determine_response_2
	set description "Executes Python code"
	___run__
	# Get response
	var.response, t1 = kb.get_key()
	
	
	# Determine the correct response, dependend on the target shape that is just shown
	if var.target_colour == 'red':
		var.correct_response = var.response_red
	else:
		var.correct_response = var.response_green
	
	
	# Add 1 to total responses, this variable is necessary to later calculate the average accuracy and average response time. 
	var.total_responses += 1
	
	# Give value 1 to the correct variable if a correct response was made and a value 0 if no or no correct response was made.
	if var.response == var.correct_response:
		var.correct = 1
		var.total_correct += 1
	else:
		var.correct = 0
	
	
	# RECORDING OF VARIABLES
	# Calculate the response time of the single trial.
	var.response_time = t1-t0
	
	# Calculate the total response time over all trials (needed to later calculate the average response time).
	var.total_response_time += var.response_time
	
	# Calculate the average response time for this block.
	var.avg_rt = var.total_response_time / var.total_responses
	var.average_response_time = var.avg_rt
		
	# Calculate the accuracy for this block.	
	var.acc = 100. * var.total_correct / var.total_responses	
	var.accuracy = var.acc
	
	
	# Write all variables to the log file
	#log.write_vars()
	__end__
	set _prepare ""

define loop colour_block_experimental_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour green
	setcycle 1 target_shape circle
	setcycle 2 target_colour red
	setcycle 2 target_shape square
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour green
	setcycle 5 target_shape circle
	setcycle 6 target_colour red
	setcycle 6 target_shape square
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	setcycle 8 target_colour red
	setcycle 8 target_shape circle
	setcycle 9 target_colour green
	setcycle 9 target_shape circle
	setcycle 10 target_colour red
	setcycle 10 target_shape square
	setcycle 11 target_colour green
	setcycle 11 target_shape square
	setcycle 12 target_colour red
	setcycle 12 target_shape circle
	setcycle 13 target_colour green
	setcycle 13 target_shape circle
	setcycle 14 target_colour red
	setcycle 14 target_shape square
	setcycle 15 target_colour green
	setcycle 15 target_shape square
	setcycle 16 target_colour red
	setcycle 16 target_shape circle
	setcycle 17 target_colour green
	setcycle 17 target_shape circle
	setcycle 18 target_colour red
	setcycle 18 target_shape square
	setcycle 19 target_colour green
	setcycle 19 target_shape square
	setcycle 20 target_colour red
	setcycle 20 target_shape circle
	setcycle 21 target_colour green
	setcycle 21 target_shape circle
	setcycle 22 target_colour red
	setcycle 22 target_shape square
	setcycle 23 target_colour green
	setcycle 23 target_shape square
	setcycle 24 target_colour red
	setcycle 24 target_shape circle
	setcycle 25 target_colour green
	setcycle 25 target_shape circle
	setcycle 26 target_colour red
	setcycle 26 target_shape square
	setcycle 27 target_colour green
	setcycle 27 target_shape square
	setcycle 28 target_colour red
	setcycle 28 target_shape circle
	setcycle 29 target_colour green
	setcycle 29 target_shape circle
	setcycle 30 target_colour red
	setcycle 30 target_shape square
	setcycle 31 target_colour green
	setcycle 31 target_shape square
	setcycle 32 target_colour red
	setcycle 32 target_shape circle
	setcycle 33 target_colour green
	setcycle 33 target_shape circle
	setcycle 34 target_colour red
	setcycle 34 target_shape square
	setcycle 35 target_colour green
	setcycle 35 target_shape square
	run colour_block_experimental_trial_sequence

define loop colour_block_experimental_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour green
	setcycle 1 target_shape circle
	setcycle 2 target_colour red
	setcycle 2 target_shape square
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour green
	setcycle 5 target_shape circle
	setcycle 6 target_colour red
	setcycle 6 target_shape square
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	setcycle 8 target_colour red
	setcycle 8 target_shape circle
	setcycle 9 target_colour green
	setcycle 9 target_shape circle
	setcycle 10 target_colour red
	setcycle 10 target_shape square
	setcycle 11 target_colour green
	setcycle 11 target_shape square
	setcycle 12 target_colour red
	setcycle 12 target_shape circle
	setcycle 13 target_colour green
	setcycle 13 target_shape circle
	setcycle 14 target_colour red
	setcycle 14 target_shape square
	setcycle 15 target_colour green
	setcycle 15 target_shape square
	setcycle 16 target_colour red
	setcycle 16 target_shape circle
	setcycle 17 target_colour green
	setcycle 17 target_shape circle
	setcycle 18 target_colour red
	setcycle 18 target_shape square
	setcycle 19 target_colour green
	setcycle 19 target_shape square
	setcycle 20 target_colour red
	setcycle 20 target_shape circle
	setcycle 21 target_colour green
	setcycle 21 target_shape circle
	setcycle 22 target_colour red
	setcycle 22 target_shape square
	setcycle 23 target_colour green
	setcycle 23 target_shape square
	setcycle 24 target_colour red
	setcycle 24 target_shape circle
	setcycle 25 target_colour green
	setcycle 25 target_shape circle
	setcycle 26 target_colour red
	setcycle 26 target_shape square
	setcycle 27 target_colour green
	setcycle 27 target_shape square
	setcycle 28 target_colour red
	setcycle 28 target_shape circle
	setcycle 29 target_colour green
	setcycle 29 target_shape circle
	setcycle 30 target_colour red
	setcycle 30 target_shape square
	setcycle 31 target_colour green
	setcycle 31 target_shape square
	setcycle 32 target_colour red
	setcycle 32 target_shape circle
	setcycle 33 target_colour green
	setcycle 33 target_shape circle
	setcycle 34 target_colour red
	setcycle 34 target_shape square
	setcycle 35 target_colour green
	setcycle 35 target_shape square
	run colour_block_experimental_trial_sequence

define sequence colour_block_experimental_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run colour_block_trial_preparation always
	run new_parallel_port_trigger_send_3 always
	run timestamp_2 always
	run colour_block_experimental_loop_1 always
	run colour_experimental_end_1 always

define sequence colour_block_experimental_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run colour_block_trial_preparation always
	run new_parallel_port_trigger_send_3 always
	run timestamp_2 always
	run colour_block_experimental_loop_2 always
	run colour_experimental_end_2 always

define inline_script colour_block_experimental_show_stimuli
	set description "Executes Python code"
	___run__
	# Show the fixation dot at the center of the screen for 350 ms.
	fixdot_canvas.show()
	clock.sleep(345)
	
	# Show the blank canvas again, this time for 150 ms.
	blank_canvas.show()
	clock.sleep(145)
	
	# Show the circle canvas if the target shape is a circle (determined in stimuli list of block loop) and the square canvas if the target shape is a  square. In addition, t0 is the point at which the target is shown, from this point until the response is made is your reaction time
	if var.target_shape == 'circle':
		t0 = target_circle_canvas.show()
	else:
		t0 = target_square_canvas.show()
	__end__
	___prepare__
	# Create a new empty canvas
	blank_canvas = canvas()
	
	# Create a new empty canvas and draw a fixation dot on it
	fixdot_canvas = canvas()
	fixdot_canvas.fixdot()
	
	# Create a new empty canvas and draw stimuli on it
	target_circle_canvas = canvas()
	target_square_canvas = canvas()
	
	# the circle is drawn in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	target_circle_canvas.circle(0, 0, var.size_in_px_circle, fill=True, color=var.target_colour)
	# the square is drawen in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	target_square_canvas.rect(var.pos_square, var.pos_square, var.size_in_px_square, var.size_in_px_square, fill=True, color=var.target_colour)
	
	# Create keyboard response
	kb = keyboard(timeout=4000, keylist=['f','d','j','k'])
	__end__

define inline_script colour_block_experimental_show_stimuli_2
	set description "Executes Python code"
	___run__
	# Show the fixation dot at the center of the screen for 350 ms.
	fixdot_canvas.show()
	clock.sleep(345)
	
	# Show the blank canvas again, this time for 150 ms.
	blank_canvas.show()
	clock.sleep(145)
	
	# Show the circle canvas if the target shape is a circle (determined in stimuli list of block loop) and the square canvas if the target shape is a  square. In addition, t0 is the point at which the target is shown, from this point until the response is made is your reaction time
	if var.target_shape == 'circle':
		t0 = target_circle_canvas.show()
	else:
		t0 = target_square_canvas.show()
	__end__
	___prepare__
	# Create a new empty canvas
	blank_canvas = canvas()
	
	# Create a new empty canvas and draw a fixation dot on it
	fixdot_canvas = canvas()
	fixdot_canvas.fixdot()
	
	# Create a new empty canvas and draw stimuli on it
	target_circle_canvas = canvas()
	target_square_canvas = canvas()
	
	# the circle is drawn in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	target_circle_canvas.circle(0, 0, var.size_in_px_circle, fill=True, color=var.target_colour)
	# the square is drawen in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	target_square_canvas.rect(var.pos_square, var.pos_square, var.size_in_px_square, var.size_in_px_square, fill=True, color=var.target_colour)
	
	# Create keyboard response
	kb = keyboard(timeout=4000, keylist=['f','d','j','k'])
	__end__

define sequence colour_block_experimental_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run colour_block_experimental_show_stimuli always
	run new_parallel_port_trigger_send_4 always
	run stimtime_2 always
	run colour_block_experimental_determine_response always
	run jitter always
	run log always

define sequence colour_block_experimental_trial_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run colour_block_experimental_show_stimuli_2 always
	run colour_block_experimental_show_stimuli always
	run new_parallel_port_trigger_send_4 always
	run stimtime_2 always
	run colour_block_experimental_determine_response_2 always
	run colour_block_experimental_determine_response always
	run jitter always
	run log always

define loop colour_block_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 8
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour green
	setcycle 1 target_shape circle
	setcycle 2 target_colour red
	setcycle 2 target_shape square
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour green
	setcycle 5 target_shape circle
	setcycle 6 target_colour red
	setcycle 6 target_shape square
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	run colour_block_practice_trial_sequence

define sequence colour_block_practice_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run colour_block_trial_preparation always
	run colour_instructions always
	run reset_feedback always
	run colour_block_practice_loop always
	run feedback "[accuracy] < 80"
	run colour_repeat_practice always
	run colour_practice_end always

define inline_script colour_block_practice_trial_script
	set description "Executes Python code"
	___run__
	# Show a blank canvas for 850 ms.
	blank_canvas.show()
	clock.sleep(845)
	
	# Show the fixation dot at the center of the screen for 350 ms.
	fixdot_canvas.show()
	clock.sleep(345)
	
	# Show the blank canvas again, this time for 150 ms.
	blank_canvas.show()
	clock.sleep(145)
	
	# Show the circle canvas if the target shape is a circle (determined in stimuli list of block loop) and the square canvas if the target shape is a  square. In addition, t0 is the point at which the target is shown, from this point until the response is made is your reaction time
	if var.target_shape == 'circle':
		t0 = target_circle_canvas.show()
	else:
		t0 = target_square_canvas.show()
	
	# Determine the correct response, dependend on the target shape that is just shown
	if var.target_colour == 'red':
		var.correct_response = var.response_red
	else:
		var.correct_response = var.response_green
	
	# Get response
	var.response, t1 = kb.get_key()
	
	# Add 1 to total responses, this variable is necessary to later calculate the average accuracy and average response time. 
	var.total_responses += 1
	
	# Give value 1 to the correct variable if a correct response was made and a value 0 if no or no correct response was made.
	if var.response == var.correct_response:
		var.correct = 1
		var.total_correct += 1
	else:
		var.correct = 0
	
	# Show feedback, show correct feedback if response was correct and incorrect feedback if response was incorrect. Show miss feedback if participant did not respond.
	if var.correct == 1:
		feedback_correct_canvas.show()
		clock.sleep(495)
	elif var.correct == 0:
		feedback_incorrect_canvas.show()
		clock.sleep(495)
	else:
		feedback_miss_canvas.show()
		clock.sleep(495)
	
	
	# RECORDING OF VARIABLES
	# Calculate the response time of the single trial.
	var.response_time = t1-t0
	
	# Calculate the total response time over all trials (needed to later calculate the average response time).
	var.total_response_time += var.response_time
	
	# Calculate the average response time for this block.
	var.avg_rt = var.total_response_time / var.total_responses
	var.average_response_time = var.avg_rt
		
	# Calculate the accuracy for this block.	
	var.acc = 100. * var.total_correct / var.total_responses	
	var.accuracy = var.acc
	
	
	if var.acc >= 80:
		repeat = 0
	elif var.acc < 80:
		repeat = 1
	# Write all variables to the log file
	#log.write_vars()
	__end__
	___prepare__
	# Create a new empty canvas
	blank_canvas = canvas()
	
	# Create a new empty canvas and draw a fixation dot on it
	fixdot_canvas = canvas()
	fixdot_canvas.fixdot()
	
	# Create a new empty canvas and draw the targetstimuli on it
	target_circle_canvas = canvas()
	target_square_canvas = canvas()
	
	# the circle is drawn in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	target_circle_canvas.circle(0, 0, var.size_in_px_circle, fill=True, color=var.target_colour)
	# the square is drawen in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	target_square_canvas.rect(var.pos_square, var.pos_square, var.size_in_px_square, var.size_in_px_square, fill=True, color=var.target_colour)
	
	# Create new empty canvasses for the feedback and draw the feedback on them
	feedback_correct_canvas = canvas()
	feedback_correct_canvas.text('Goed')
	
	feedback_incorrect_canvas = canvas()
	feedback_incorrect_canvas.text('Fout')
	
	feedback_miss_canvas = canvas()
	feedback_miss_canvas.text('Mis')
	
	# Create keyboard response
	kb = keyboard(timeout=4000, keylist=['f','d','j','k'])
	__end__

define sequence colour_block_practice_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run colour_block_practice_trial_script always
	run jitter always
	run log always

define inline_script colour_block_trial_preparation
	set description "Executes Python code"
	set _run ""
	___prepare__
	global jitter_list
	
	number_trials = 36
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(100)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	
	# Preparation of the variables that you want to write values to in the trial sequence. There, you add values to it and in order to be able to do so, the variable first needs to have a start value, that is wat we do here. 
	global repeat
	
	var.total_responses = 0
	var.total_response_time = 0
	var.total_correct = 0
	repeat = 0
	
	#log.write_vars()
	__end__

define inline_script colour_block_trial_preparation_2
	set description "Executes Python code"
	___run__
	# Preparation of the variables that you want to write values to in the trial sequence. There, you add values to it and in order to be able to do so, the variable first needs to have a start value, that is wat we do here. 
	var.total_responses = 0
	var.total_response_time = 0
	var.total_correct = 0
	var.repeat = 0
	
	#log.write_vars()
	__end__
	___prepare__
	global jitter_list
	
	number_trials = 36
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(100)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	__end__

define inline_script colour_block_trial_preparation_3
	set description "Executes Python code"
	___run__
	# Preparation of the variables that you want to write values to in the trial sequence. There, you add values to it and in order to be able to do so, the variable first needs to have a start value, that is wat we do here. 
	var.total_responses = 0
	var.total_response_time = 0
	var.total_correct = 0
	var.repeat = 0
	
	#log.write_vars()
	__end__
	___prepare__
	global jitter_list
	
	number_trials = 36
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(100)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	__end__

define sketchpad colour_experimental_end_1
	set start_response_interval no
	set duration 20000
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Dit was het einde van de kleur taak. <br /><br />U kunt nu even rusten. De taak zal automatisch verder gaan. " x=0 y=0 z_index=0

define sketchpad colour_experimental_end_2
	set start_response_interval no
	set duration 20000
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="<br />Dit was het einde van de kleur taak. <br /><br />U kunt nu even rusten. De taak zal automatisch verder gaan. " x=0 y=0 z_index=0

define loop colour_experimental_loop_1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run colour_block_experimental_sequence_1

define loop colour_experimental_loop_2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run colour_block_experimental_sequence_2

define sketchpad colour_instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="<b>Kleur taak</b><br /><br />Tijdens deze taak moet u reageren op de <u>kleur van de figuren</u> die u ziet. <br /><br /><b><br />Als het figuur rood is, druk dan op de '[response_red]'<br />Als het figuur groen is, druk dan op de '[response_green]' </b><br /><br />Er zal nu eerst een oefenronde komen. <br />Druk op een toets om hiermee te starten." x=0 y=0 z_index=0

define sketchpad colour_practice_end
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Het lijkt erop dat u het onder de knie heeft. Dit is daarom het einde van de oefening. <br /><br /><br />De echte taak zal nu beginnen. Let erop dat u nu geen feedback meer zal krijgen.  <br /><br />Gebruik dezelfde toetsen als in de oefening:<br /><b>Druk op de '[response_red]' als het figuur rood is.<br />Druk op de '[response_green]' als het figuur groen is.</b><br /><br />Druk op een toets om te starten. <br />" x=0 y=0 z_index=0

define loop colour_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run colour_block_practice_sequence

define inline_script colour_repeat_practice
	set description "Executes Python code"
	___run__
	if repeat == 1: 
		exp.items["colour_block_practice_sequence"].prepare()
		exp.items["colour_block_practice_sequence"].run()
	#else:
	#	exp.items["colour_experimental_start"].prepare()
	#	exp.items["colour_experimental_start"].run()
	__end__
	set _prepare ""

define inline_script determine_responses
	set description "Executes Python code"
	___run__
	# in this version, participants respond to shape with their left hand and to colour with their right hand.
	
	var.response_circle = 'f'
	var.response_square = 'd'
	var.response_red = 'j'
	var.response_green = 'k'
	__end__
	set _prepare ""

define inline_script determine_stimuli_size
	set description "Executes Python code"
	___run__
	import random
	
	from math import atan2, degrees
	
	
	h = 20 # Monitor height in cm
	d = 60 # Distance between monitor and participant in cm
	r = 768 # Vertical resolution of the monitor
	
	# Calculate the number of degrees that correspond to a single pixel. This will
	deg_per_px = degrees(atan2(.5*h, d)) / (.5*r)
	
	# CIRCLE SIZE
	size_in_deg_circle = 2.3 # The stimulus size in visual degrees
	# Calculate the size of the stimulus in pixels
	var.size_in_px_circle = size_in_deg_circle / deg_per_px
	
	# SQUARE SIZE
	size_in_deg_square = 4.6 # The stimulus size in visual degrees
	# Calculate the size of the stimulus in pixels
	var.size_in_px_square = size_in_deg_square / deg_per_px
	#square position
	var.pos_square = var.size_in_px_square / 2 * -1
	
	
	# COLOUR CUE SIZE
	size_in_deg_colourcue = 2.3 # The stimulus size in visual degrees
	# Calculate the size of the stimulus in pixels
	var.size_in_px_colourcue = size_in_deg_colourcue / deg_per_px
	
	# SHAPE CUE SIZE
	size_in_deg_shapecue = 2.3 # The stimulus size in visual degrees
	# Calculate the size of the stimulus in pixels
	var.size_in_px_shapecue = size_in_deg_shapecue / deg_per_px
	__end__
	set _prepare ""

define sketchpad experiment_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Dit was het einde van deze computertaak.<br /><br />Laat de onderzoeker weten dat u klaar bent en druk op een toets om af te sluiten." x=0 y=0 z_index=0

define sequence experiment_switch_A_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run new_parallel_port_trigger_init always
	run determine_responses always
	run determine_stimuli_size always
	run main_sequence always

define sketchpad experiment_welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="De computertaak die u nu gaat doen bestaan uit een aantal korte taken. <br /><br />Tijdens alle taken krijgt u figuren te zien: vierkanten of cirkels. Deze figuren zijn of rood of groen gekleurd. Afhankelijk van de taak, moet u reageren op de kleur van het figuur, of op de vorm van het figuur. <br /><br />Per taak krijgt u een korte instructie. <br /><br /><br />Druk op een toets om verder te gaan." x=0 y=0 z_index=0

define feedback feedback
	set reset_variables no
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="U had in totaal [acc] % goed. Dat kan beter!<br /><br />We gaan het daarom nog een keer oefenen.<br /><br />Druk op een toets om de oefenronde te herhalen. " x=0 y=0 z_index=0

define notepad getting_started
	__note__
	Versie A:
	
	vorm
	kleur
	mixed
	kleur
	vorm
	
	Vorm = links
	kleur = rechts
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script jitter
	set description "Executes Python code"
	___run__
	# Jitter between trials. 
	jitter_canvas.show()
	
	
	
	# Choose an random index number for the jitter list. Next, select the according jitter and set this value as jitter value for this trial. Next, delete this value from the list to make sure that it is not chosen again. 
	jitter_index = random.randrange(len(jitter_list))
	var.jitter_value = jitter_list[jitter_index]
	del jitter_list[jitter_index]
	
	clock.sleep(var.jitter_value)
	__end__
	___prepare__
	# Create canvas for the jitter
	jitter_canvas = canvas()
	__end__

define logger log
	set description "Logs experimental data"
	set auto_log yes

define sequence main_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_welcome always
	run shape_practice_loop always
	run shape_experimental_loop_1 always
	run colour_practice_loop always
	run colour_experimental_loop_1 always
	run mixed_practice_loop always
	run mixed_experimental_loop_1 always
	run mixed_experimental_loop_2 always
	run mixed_experimental_loop_3 always
	run colour_practice_loop always
	run colour_experimental_loop_2 always
	run shape_practice_loop always
	run shape_experimental_loop_2 always
	run experiment_end always

define inline_script mixed_block_experimental_determine_response
	set description "Executes Python code"
	___run__
	# Get response
	var.response, t1 = kb.get_key()
	
	
	# Determine the correct response, dependend on the cue of the trial and the target shape or colour
	if var.cue == 'shape':
		if var.target_shape == 'circle':
			var.correct_response = var.response_circle
		elif var.target_shape == 'square':
			var.correct_response = var.response_square
		else:
			raise Exception('Invalid shape: %s' % var.target_shape)
	else:
		if var.target_colour == 'red':
			var.correct_response = var.response_red
		elif var.target_colour == 'green':
			var.correct_response = var.response_green
		else:
			raise Exception('Invalid target colour: %s' % var.target_colour)
	
	
	# Add 1 to total responses, this variable is necessary to later calculate the average accuracy and average response time. 
	var.total_responses += 1
	
	# Add 1 to a variable that counts at which trial we're at. 
	var.run_counter +=  1
	
	# Give value 1 to the correct variable if a correct response was made and a value 0 if no or no correct response was made.
	if var.response == var.correct_response:
		var.correct = 1
		var.total_correct += 1
	else:
		var.correct = 0
	
	# RECORDING OF VARIABLES
	# Calculate the response time of the single trial.
	var.response_time = t1-t0
	
	# Calculate the total response time over all trials (needed to later calculate the average response time).
	var.total_response_time += var.response_time
	
	# Calculate the average response time for this block.
	var.avg_rt = var.total_response_time / var.total_responses
	var.average_response_time = var.avg_rt
		
	# Calculate the accuracy for this block.	
	var.acc = 100. * var.total_correct / var.total_responses	
	var.accuracy = var.acc
	
	
	# Write all variables to the log file
	#log.write_vars()
	__end__
	set _prepare ""

define inline_script mixed_block_experimental_determine_response_1
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define inline_script mixed_block_experimental_determine_response_1_1
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define sketchpad mixed_block_experimental_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="We gaan de gemixte taak nog een keer doen.<br /><br />Gebruik dezelfde toetsen als zojuist:<br /><b><br />Druk op de '[response_circle]' als het figuur een cirkel is.<br />Druk op de '[response_square]' als het figuur een vierkant is.<br />Druk op de '[response_red]' als het figuur rood is.<br />Druk op de '[response_green]' als het figuur groen is.</b><br /><br />Druk op een toets om de taak te starten. <br />" x=0 y=0 z_index=0

define loop mixed_block_experimental_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour red
	setcycle 1 target_shape square
	setcycle 2 target_colour green
	setcycle 2 target_shape circle
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour red
	setcycle 5 target_shape square
	setcycle 6 target_colour green
	setcycle 6 target_shape circle
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	setcycle 8 target_colour red
	setcycle 8 target_shape circle
	setcycle 9 target_colour red
	setcycle 9 target_shape square
	setcycle 10 target_colour green
	setcycle 10 target_shape circle
	setcycle 11 target_colour green
	setcycle 11 target_shape square
	setcycle 12 target_colour red
	setcycle 12 target_shape circle
	setcycle 13 target_colour red
	setcycle 13 target_shape square
	setcycle 14 target_colour green
	setcycle 14 target_shape circle
	setcycle 15 target_colour green
	setcycle 15 target_shape square
	setcycle 16 target_colour red
	setcycle 16 target_shape circle
	setcycle 17 target_colour red
	setcycle 17 target_shape square
	setcycle 18 target_colour green
	setcycle 18 target_shape circle
	setcycle 19 target_colour green
	setcycle 19 target_shape square
	setcycle 20 target_colour red
	setcycle 20 target_shape circle
	setcycle 21 target_colour red
	setcycle 21 target_shape square
	setcycle 22 target_colour green
	setcycle 22 target_shape circle
	setcycle 23 target_colour green
	setcycle 23 target_shape square
	setcycle 24 target_colour red
	setcycle 24 target_shape circle
	setcycle 25 target_colour red
	setcycle 25 target_shape square
	setcycle 26 target_colour green
	setcycle 26 target_shape circle
	setcycle 27 target_colour green
	setcycle 27 target_shape square
	setcycle 28 target_colour red
	setcycle 28 target_shape circle
	setcycle 29 target_colour red
	setcycle 29 target_shape square
	setcycle 30 target_colour green
	setcycle 30 target_shape circle
	setcycle 31 target_colour green
	setcycle 31 target_shape square
	setcycle 32 target_colour red
	setcycle 32 target_shape circle
	setcycle 33 target_colour red
	setcycle 33 target_shape square
	setcycle 34 target_colour green
	setcycle 34 target_shape circle
	setcycle 35 target_colour green
	setcycle 35 target_shape square
	setcycle 36 target_colour red
	setcycle 36 target_shape circle
	setcycle 37 target_colour red
	setcycle 37 target_shape square
	setcycle 38 target_colour green
	setcycle 38 target_shape circle
	setcycle 39 target_colour green
	setcycle 39 target_shape square
	setcycle 40 target_colour red
	setcycle 40 target_shape circle
	setcycle 41 target_colour red
	setcycle 41 target_shape square
	setcycle 42 target_colour green
	setcycle 42 target_shape circle
	setcycle 43 target_colour green
	setcycle 43 target_shape square
	setcycle 44 target_colour red
	setcycle 44 target_shape circle
	setcycle 45 target_colour red
	setcycle 45 target_shape square
	setcycle 46 target_colour green
	setcycle 46 target_shape circle
	setcycle 47 target_colour green
	setcycle 47 target_shape square
	run mixed_block_experimental_trial_sequence_1_2

define loop mixed_block_experimental_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour red
	setcycle 1 target_shape square
	setcycle 2 target_colour green
	setcycle 2 target_shape circle
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour red
	setcycle 5 target_shape square
	setcycle 6 target_colour green
	setcycle 6 target_shape circle
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	setcycle 8 target_colour red
	setcycle 8 target_shape circle
	setcycle 9 target_colour red
	setcycle 9 target_shape square
	setcycle 10 target_colour green
	setcycle 10 target_shape circle
	setcycle 11 target_colour green
	setcycle 11 target_shape square
	setcycle 12 target_colour red
	setcycle 12 target_shape circle
	setcycle 13 target_colour red
	setcycle 13 target_shape square
	setcycle 14 target_colour green
	setcycle 14 target_shape circle
	setcycle 15 target_colour green
	setcycle 15 target_shape square
	setcycle 16 target_colour red
	setcycle 16 target_shape circle
	setcycle 17 target_colour red
	setcycle 17 target_shape square
	setcycle 18 target_colour green
	setcycle 18 target_shape circle
	setcycle 19 target_colour green
	setcycle 19 target_shape square
	setcycle 20 target_colour red
	setcycle 20 target_shape circle
	setcycle 21 target_colour red
	setcycle 21 target_shape square
	setcycle 22 target_colour green
	setcycle 22 target_shape circle
	setcycle 23 target_colour green
	setcycle 23 target_shape square
	setcycle 24 target_colour red
	setcycle 24 target_shape circle
	setcycle 25 target_colour red
	setcycle 25 target_shape square
	setcycle 26 target_colour green
	setcycle 26 target_shape circle
	setcycle 27 target_colour green
	setcycle 27 target_shape square
	setcycle 28 target_colour red
	setcycle 28 target_shape circle
	setcycle 29 target_colour red
	setcycle 29 target_shape square
	setcycle 30 target_colour green
	setcycle 30 target_shape circle
	setcycle 31 target_colour green
	setcycle 31 target_shape square
	setcycle 32 target_colour red
	setcycle 32 target_shape circle
	setcycle 33 target_colour red
	setcycle 33 target_shape square
	setcycle 34 target_colour green
	setcycle 34 target_shape circle
	setcycle 35 target_colour green
	setcycle 35 target_shape square
	setcycle 36 target_colour red
	setcycle 36 target_shape circle
	setcycle 37 target_colour red
	setcycle 37 target_shape square
	setcycle 38 target_colour green
	setcycle 38 target_shape circle
	setcycle 39 target_colour green
	setcycle 39 target_shape square
	setcycle 40 target_colour red
	setcycle 40 target_shape circle
	setcycle 41 target_colour red
	setcycle 41 target_shape square
	setcycle 42 target_colour green
	setcycle 42 target_shape circle
	setcycle 43 target_colour green
	setcycle 43 target_shape square
	setcycle 44 target_colour red
	setcycle 44 target_shape circle
	setcycle 45 target_colour red
	setcycle 45 target_shape square
	setcycle 46 target_colour green
	setcycle 46 target_shape circle
	setcycle 47 target_colour green
	setcycle 47 target_shape square
	run mixed_block_experimental_trial_sequence_2

define loop mixed_block_experimental_loop_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour red
	setcycle 1 target_shape square
	setcycle 2 target_colour green
	setcycle 2 target_shape circle
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour red
	setcycle 5 target_shape square
	setcycle 6 target_colour green
	setcycle 6 target_shape circle
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	setcycle 8 target_colour red
	setcycle 8 target_shape circle
	setcycle 9 target_colour red
	setcycle 9 target_shape square
	setcycle 10 target_colour green
	setcycle 10 target_shape circle
	setcycle 11 target_colour green
	setcycle 11 target_shape square
	setcycle 12 target_colour red
	setcycle 12 target_shape circle
	setcycle 13 target_colour red
	setcycle 13 target_shape square
	setcycle 14 target_colour green
	setcycle 14 target_shape circle
	setcycle 15 target_colour green
	setcycle 15 target_shape square
	setcycle 16 target_colour red
	setcycle 16 target_shape circle
	setcycle 17 target_colour red
	setcycle 17 target_shape square
	setcycle 18 target_colour green
	setcycle 18 target_shape circle
	setcycle 19 target_colour green
	setcycle 19 target_shape square
	setcycle 20 target_colour red
	setcycle 20 target_shape circle
	setcycle 21 target_colour red
	setcycle 21 target_shape square
	setcycle 22 target_colour green
	setcycle 22 target_shape circle
	setcycle 23 target_colour green
	setcycle 23 target_shape square
	setcycle 24 target_colour red
	setcycle 24 target_shape circle
	setcycle 25 target_colour red
	setcycle 25 target_shape square
	setcycle 26 target_colour green
	setcycle 26 target_shape circle
	setcycle 27 target_colour green
	setcycle 27 target_shape square
	setcycle 28 target_colour red
	setcycle 28 target_shape circle
	setcycle 29 target_colour red
	setcycle 29 target_shape square
	setcycle 30 target_colour green
	setcycle 30 target_shape circle
	setcycle 31 target_colour green
	setcycle 31 target_shape square
	setcycle 32 target_colour red
	setcycle 32 target_shape circle
	setcycle 33 target_colour red
	setcycle 33 target_shape square
	setcycle 34 target_colour green
	setcycle 34 target_shape circle
	setcycle 35 target_colour green
	setcycle 35 target_shape square
	setcycle 36 target_colour red
	setcycle 36 target_shape circle
	setcycle 37 target_colour red
	setcycle 37 target_shape square
	setcycle 38 target_colour green
	setcycle 38 target_shape circle
	setcycle 39 target_colour green
	setcycle 39 target_shape square
	setcycle 40 target_colour red
	setcycle 40 target_shape circle
	setcycle 41 target_colour red
	setcycle 41 target_shape square
	setcycle 42 target_colour green
	setcycle 42 target_shape circle
	setcycle 43 target_colour green
	setcycle 43 target_shape square
	setcycle 44 target_colour red
	setcycle 44 target_shape circle
	setcycle 45 target_colour red
	setcycle 45 target_shape square
	setcycle 46 target_colour green
	setcycle 46 target_shape circle
	setcycle 47 target_colour green
	setcycle 47 target_shape square
	run mixed_block_experimental_trial_sequence_3

define sequence mixed_block_experimental_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mixed_block_experimental_trial_preparation_1 always
	run new_parallel_port_trigger_send_5 always
	run timestamp_3 always
	run mixed_block_experimental_loop_1 always
	run mixed_experimental_break always

define sequence mixed_block_experimental_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mixed_block_experimental_instructions always
	run mixed_block_experimental_trial_preparation_2 always
	run new_parallel_port_trigger_send_7 always
	run timestamp_4 always
	run mixed_block_experimental_loop_2 always
	run mixed_experimental_break always

define sequence mixed_block_experimental_sequence_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mixed_block_experimental_instructions always
	run mixed_block_experimental_trial_preparation_3 always
	run new_parallel_port_trigger_send_9 always
	run timestamp_5 always
	run mixed_block_experimental_loop_3 always
	run mixed_experimental_end always

define inline_script mixed_block_experimental_show_stimuli
	set description "Executes Python code"
	___run__
	# Show the fixation dot at the center of the screen for 350 ms.
	fixdot_canvas.show()
	clock.sleep(345)
	
	# Show the blank canvas again, this time for 150 ms.
	blank_canvas.show()
	clock.sleep(145)
	
	# Determine the cue for this trial, based on the cues in the cue list
	var.cue = var.cue_list[var.run_counter]
	
	# Write 1 or 0 (for switch or not switch) for this trial
	if var.switch_list[var.run_counter] == 1:
		var.switch = 1
	elif var.switch_list[var.run_counter] == 0:
		var.switch = 0
	
	# Show colour or shape cue for 250 ms. 
	if var.cue == 'colour':
		cue_colour_canvas.show()
		clock.sleep(245)
	elif var.cue == 'shape':
		cue_shape_canvas.show()
		clock.sleep(245)
		
	# Show the circle canvas if the target shape is a circle (determined in stimuli list of block loop) and the square canvas if the target shape is a  square. The cue remains on the screen (is drawn on the screen again) In addition, t0 is the point at which the target is shown, from this point until the response is made is your reaction time
	if var.target_shape == 'circle':
		if var.cue == 'colour':
			t0 = mixed_circle_colour_canvas.show()
		elif var.cue == 'shape':
			t0 = mixed_circle_shape_canvas.show()
	elif var.target_shape == 'square':
		if var.cue == 'colour':
			t0 = mixed_square_colour_canvas.show()
		elif var.cue == 'shape': 
			t0 = mixed_square_shape_canvas.show()
	__end__
	___prepare__
	# Create a new empty canvas
	blank_canvas = canvas()
	
	# Create a new empty canvas and draw a fixation dot on it
	fixdot_canvas = canvas()
	fixdot_canvas.fixdot()
	
	# CREATE CUES
	# Create an empty canvas and draw the colour cue, which can be found in the file pool, on it in the center of the screen with 1.4 times the original size.
	cue_colour_canvas = canvas()
	path_colourcue = pool['cue_colour.png']
	cue_colour_canvas.image(path_colourcue, x=0, y=-240, scale = 0.35)
	
	# Create an empty canvas and draw the shape cue, which can be found in the file pool, on it in the center of screen with 0.5 times the original size.
	cue_shape_canvas = canvas()
	path_shapecue = pool['cue_shape.png']
	cue_shape_canvas.image(path_shapecue, x=0, y=-240, scale=0.8)
	
	# CREATE STIMULI CANVASSES
	# Create multiple empty canvasses, for all possible combinations of cue and target shape
	mixed_circle_colour_canvas = canvas()
	mixed_circle_shape_canvas = canvas()
	mixed_square_colour_canvas = canvas()
	mixed_square_shape_canvas = canvas()
	
	# Draw a circle on the circle canvasses, in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	mixed_circle_colour_canvas.circle(0, 0, var.size_in_px_circle, fill=True, color=var.target_colour)
	mixed_circle_shape_canvas.circle(0, 0, var.size_in_px_circle, fill=True, color=var.target_colour)
	
	# Draw the cues on the same canvas as the circle
	mixed_circle_colour_canvas.image(path_colourcue, x=0, y=-240, scale = 0.35)
	mixed_circle_shape_canvas.image(path_shapecue, x=0, y=-240, scale=0.8)
	
	# Draw a square on the square canvasses, in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	mixed_square_colour_canvas.rect(var.pos_square, var.pos_square, var.size_in_px_square, var.size_in_px_square, fill=True, color=var.target_colour)
	mixed_square_shape_canvas.rect(var.pos_square, var.pos_square, var.size_in_px_square, var.size_in_px_square, fill=True, color=var.target_colour)
	
	# Draw the cues on the same canvas as the square
	mixed_square_colour_canvas.image(path_colourcue, x=0, y=-240, scale = 0.35)
	mixed_square_shape_canvas.image(path_shapecue, x=0, y=-240, scale=0.8)
	
	# Create keyboard response
	kb = keyboard(timeout=4000, keylist=['f','d','j','k'])
	__end__

define inline_script mixed_block_experimental_trial_preparation_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	global jitter_list
	
	number_trials = 48
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(110)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	
	# SWITCH PART
	import random
	global switch
	global switch_list
	global elements
	global start_cue
	global cue_list
	
	# Determine number of switch trials and number of nonswitch trials (=elements)
	number_switch = 1
	number_nonswitch = 0
	elements = 24
	
	# Create list with 24 switch trials (indicated by the 1) and 24 non-switch trials (indicated by the 0) and randomize the order. 
	var.switch_list = [number_switch] * elements + [number_nonswitch] * elements 
	random.shuffle(var.switch_list)
	
	# From the possible cues, randomly select a cue to start with
	cue_options = ['shape', 'colour']
	start_cue = random.choice(cue_options)
	
	var.cue=start_cue
	
	var.cue_list=[]
	var.cue_list.append(start_cue)
	
	# Make sure that there are no more than 4 repetitions per trial type (switch/non-switch) by checking it and reshuffle the list al long as necessary
	while True:
		reshuffle = False
		for i in range(len(var.switch_list)-3):
			if var.switch_list[i] == var.switch_list[i+1] == var.switch_list[i+2] == var.switch_list[i+3]:
				reshuffle = True
				break
		if not reshuffle:
			break
		random.shuffle(var.switch_list)
	
	counter = 0 
	# Create cue list based on the switch list
	for i in range(len(var.switch_list)-1):
	   if var.switch_list[counter] == 0:
		   if var.cue_list[counter]=='shape':
			   var.cue_list.append('shape')
		   elif var.cue_list[counter] == 'colour':
			   var.cue_list.append('colour')
	   elif var.switch_list[counter] == 1:
		   if var.cue_list[counter] == 'shape':
			   var.cue_list.append('colour')
		   elif var.cue_list[counter] == 'colour':
			   var.cue_list.append('shape')
	   counter += 1
	   
	# Preparation of the variables that you want to write values to in the trial sequence. There, you add values to it and in order to be able to do so, the variable first needs to have a start value, that is wat we do here. 	
	
	var.run_counter = 0
	var.total_responses = 0
	var.total_response_time = 0
	var.total_correct = 0
	var.repeat = 0
	
	#log.write_vars()
	__end__

define inline_script mixed_block_experimental_trial_preparation_2
	set description "Executes Python code"
	set _run ""
	___prepare__
	global jitter_list
	
	number_trials = 48
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(120)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	
	# SWITCH PART
	import random
	global switch
	global switch_list
	global elements
	global start_cue
	global cue_list
	
	# Determine number of switch trials and number of nonswitch trials (=elements)
	number_switch = 1
	number_nonswitch = 0
	elements = 24
	
	# Create list with 24 switch trials (indicated by the 1) and 24 non-switch trials (indicated by the 0) and randomize the order. 
	var.switch_list = [number_switch] * elements + [number_nonswitch] * elements 
	random.shuffle(var.switch_list)
	
	# From the possible cues, randomly select a cue to start with
	cue_options = ['shape', 'colour']
	start_cue = random.choice(cue_options)
	
	var.cue=start_cue
	
	var.cue_list=[]
	var.cue_list.append(start_cue)
	
	# Make sure that there are no more than 4 repetitions per trial type (switch/non-switch) by checking it and reshuffle the list al long as necessary
	while True:
		reshuffle = False
		for i in range(len(var.switch_list)-3):
			if var.switch_list[i] == var.switch_list[i+1] == var.switch_list[i+2] == var.switch_list[i+3]:
				reshuffle = True
				break
		if not reshuffle:
			break
		random.shuffle(var.switch_list)
	
	counter = 0 
	# Create cue list based on the switch list
	for i in range(len(var.switch_list)-1):
	   if var.switch_list[counter] == 0:
		   if var.cue_list[counter]=='shape':
			   var.cue_list.append('shape')
		   elif var.cue_list[counter] == 'colour':
			   var.cue_list.append('colour')
	   elif var.switch_list[counter] == 1:
		   if var.cue_list[counter] == 'shape':
			   var.cue_list.append('colour')
		   elif var.cue_list[counter] == 'colour':
			   var.cue_list.append('shape')
	   counter += 1
	   
	# Preparation of the variables that you want to write values to in the trial sequence. There, you add values to it and in order to be able to do so, the variable first needs to have a start value, that is wat we do here. 	
	
	var.run_counter = 0
	var.total_responses = 0
	var.total_response_time = 0
	var.total_correct = 0
	var.repeat = 0
	
	#log.write_vars()
	__end__

define inline_script mixed_block_experimental_trial_preparation_3
	set description "Executes Python code"
	set _run ""
	___prepare__
	global jitter_list
	
	number_trials = 48
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(130)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	
	
	# SWITCH PART
	import random
	global switch
	global switch_list
	global elements
	global start_cue
	global cue_list
	
	# Determine number of switch trials and number of nonswitch trials (=elements)
	number_switch = 1
	number_nonswitch = 0
	elements = 24
	
	# Create list with 24 switch trials (indicated by the 1) and 24 non-switch trials (indicated by the 0) and randomize the order. 
	var.switch_list = [number_switch] * elements + [number_nonswitch] * elements 
	random.shuffle(var.switch_list)
	
	# From the possible cues, randomly select a cue to start with
	cue_options = ['shape', 'colour']
	start_cue = random.choice(cue_options)
	
	var.cue=start_cue
	
	var.cue_list=[]
	var.cue_list.append(start_cue)
	
	# Make sure that there are no more than 4 repetitions per trial type (switch/non-switch) by checking it and reshuffle the list al long as necessary
	while True:
		reshuffle = False
		for i in range(len(var.switch_list)-3):
			if var.switch_list[i] == var.switch_list[i+1] == var.switch_list[i+2] == var.switch_list[i+3]:
				reshuffle = True
				break
		if not reshuffle:
			break
		random.shuffle(var.switch_list)
	
	counter = 0 
	# Create cue list based on the switch list
	for i in range(len(var.switch_list)-1):
	   if var.switch_list[counter] == 0:
		   if var.cue_list[counter]=='shape':
			   var.cue_list.append('shape')
		   elif var.cue_list[counter] == 'colour':
			   var.cue_list.append('colour')
	   elif var.switch_list[counter] == 1:
		   if var.cue_list[counter] == 'shape':
			   var.cue_list.append('colour')
		   elif var.cue_list[counter] == 'colour':
			   var.cue_list.append('shape')
	   counter += 1
	   
	# Preparation of the variables that you want to write values to in the trial sequence. There, you add values to it and in order to be able to do so, the variable first needs to have a start value, that is wat we do here. 	
	
	var.run_counter = 0
	var.total_responses = 0
	var.total_response_time = 0
	var.total_correct = 0
	var.repeat = 0
	
	#log.write_vars()
	__end__

define sequence mixed_block_experimental_trial_sequence_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mixed_block_experimental_show_stimuli always
	run new_parallel_port_trigger_send_6 always
	run stimtime_3 always
	run mixed_block_experimental_determine_response always
	run jitter always
	run log always

define sequence mixed_block_experimental_trial_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mixed_block_experimental_show_stimuli always
	run new_parallel_port_trigger_send_8 always
	run stimtime_4 always
	run mixed_block_experimental_determine_response_1 always
	run jitter always
	run log always

define sequence mixed_block_experimental_trial_sequence_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mixed_block_experimental_show_stimuli always
	run new_parallel_port_trigger_send_10 always
	run stimtime_5 always
	run mixed_block_experimental_determine_response_1_1 always
	run jitter always
	run log always

define loop mixed_block_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour red
	setcycle 1 target_shape square
	setcycle 2 target_colour green
	setcycle 2 target_shape circle
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour red
	setcycle 5 target_shape square
	setcycle 6 target_colour green
	setcycle 6 target_shape circle
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	setcycle 8 target_colour red
	setcycle 8 target_shape circle
	setcycle 9 target_colour red
	setcycle 9 target_shape square
	setcycle 10 target_colour green
	setcycle 10 target_shape circle
	setcycle 11 target_colour green
	setcycle 11 target_shape square
	setcycle 12 target_colour red
	setcycle 12 target_shape circle
	setcycle 13 target_colour red
	setcycle 13 target_shape square
	setcycle 14 target_colour green
	setcycle 14 target_shape circle
	setcycle 15 target_colour green
	setcycle 15 target_shape square
	run mixed_block_practice_trial_sequence

define sequence mixed_block_practice_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run mixed_instructions_1 always
	run mixed_instructions_2 always
	run reset_feedback always
	run mixed_block_practice_trial_preparation always
	run mixed_block_practice_loop always
	run feedback "[accuracy] < 80"
	run mixed_repeat_practice always
	run mixed_practice_end always

define inline_script mixed_block_practice_trial_preparation
	set description "Executes Python code"
	set _run ""
	___prepare__
	global jitter_list
	
	number_trials = 16
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(110)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	
	
	# SWITCH PART
	import random
	global switch
	global switch_list
	global elements
	global start_cue
	global cue_list
	
	# Determine number of switch trials and number of nonswitch trials (=elements)
	number_switch = 1
	number_nonswitch = 0
	elements = 8
	
	# Create list with 72 switch trials (indicated by the 1) and 72 non-switch trials (indicated by the 0) and randomize the order. 
	var.switch_list = [number_switch] * elements + [number_nonswitch] * elements 
	random.shuffle(var.switch_list)
	
	# From the possible cues, randomly select a cue to start with
	cue_list = ['shape', 'colour']
	start_cue = random.choice(cue_list)
	
	var.cue=start_cue
	
	# Make sure that there are no more than 4 repetitions per trial type (switch/non-switch) by checking it and reshuffle the list al long as necessary
	while True:
		reshuffle = False
		for i in range(len(var.switch_list)-3):
			if var.switch_list[i] == var.switch_list[i+1] == var.switch_list[i+2] == var.switch_list[i+3]:
				reshuffle = True
				break
		if not reshuffle:
			break
		random.shuffle(var.switch_list)
	
	# Preparation of the variables that you want to write values to in the trial sequence. There, you add values to it and in order to be able to do so, the variable first needs to have a start value, that is wat we do here. 	
	global repeat
	
	var.run_counter = 0 
	var.total_responses = 0
	var.total_response_time = 0
	var.total_correct = 0
	repeat = 0
	
	#log.write_vars()
	__end__

define inline_script mixed_block_practice_trial_script
	set description "Executes Python code"
	___run__
	# DETERMINE CUE BASED ON SWITCH OR NOT SWITCH	
	# If the (trial number)nd on the switch list is a 1, the next trial should have a different cue than the current trial and thus the variable 'cue' should change. If there is a 0, the next trial should have the same cue as the current trial thus the variable 'cue' can remain the same.		
	if var.switch_list[var.run_counter] == 1:
		if var.cue == 'colour':
			var.cue = 'shape'
		else:
			var.cue = 'colour'
		var.switch = 1
	else:
		if var.cue == 'colour':
			var.cue = 'colour'
		else: 
			var.cue = 'shape'
		var.switch = 0
		
	# Show a blank canvas for 850 ms.
	blank_canvas.show()
	clock.sleep(845)
	
	# Show the fixation dot at the center of the screen for 350 ms.
	fixdot_canvas.show()
	clock.sleep(345)
	
	# Show the blank canvas again, this time for 150 ms.
	blank_canvas.show()
	clock.sleep(145)
	
	# Show colour or shape cue for 250 ms. The first trial, the cue is determined by the start cue. Later, it is determined by whether it is a switch trial or not and thus whether a change in cue should be made or not
	if var.cue == 'colour':
		cue_colour_canvas.show()
		clock.sleep(245)
	else:
		cue_shape_canvas.show()
		clock.sleep(245)
		
	# Show the circle canvas if the target shape is a circle (determined in stimuli list of block loop) and the square canvas if the target shape is a  square. The cue remains on the screen (is drawn on the screen again) In addition, t0 is the point at which the target is shown, from this point until the response is made is your reaction time
	if var.target_shape == 'circle':
		if var.cue == 'colour':
			t0 = mixed_circle_colour_canvas.show()
		else:
			t0 = mixed_circle_shape_canvas.show()
	else:
		if var.cue == 'colour':
			t0 = mixed_square_colour_canvas.show()
		else: 
			t0 = mixed_square_shape_canvas.show()
	
	# Determine the correct response, dependend on the cue of the trial and the target shape or colour
	if var.cue == 'shape':
		if var.target_shape == 'circle':
			var.correct_response = var.response_circle
		elif var.target_shape == 'square':
			var.correct_response = var.response_square
		else:
			raise Exception('Invalid shape: %s' % var.target_shape)
	else:
		if var.target_colour == 'red':
			var.correct_response = var.response_red
		elif var.target_colour == 'green':
			var.correct_response = var.response_green
		else:
			raise Exception('Invalid target colour: %s' % var.target_colour)
	
	
	# Get response
	var.response, t1 = kb.get_key()
	
	# Add 1 to total responses, this variable is necessary to later calculate the average accuracy and average response time. 
	var.total_responses += 1
	
	# Add 1 to a variable that counts at which trial we're at. 
	var.run_counter +=  1
	
	# Give value 1 to the correct variable if a correct response was made and a value 0 if no or no correct response was made.
	if var.response == var.correct_response:
		var.correct = 1
		var.total_correct += 1
	else:
		var.correct = 0
	
	# Show feedback, show correct feedback if response was correct and incorrect feedback if response was incorrect. Show miss feedback if participant did not respond.
	if var.correct == 1:
		feedback_correct_canvas.show()
		clock.sleep(495)
	elif var.correct == 0:
		feedback_incorrect_canvas.show()
		clock.sleep(495)
	else:
		feedback_miss_canvas.show()
		clock.sleep(495)
	
	# RECORDING OF VARIABLES
	# Calculate the response time of the single trial.
	var.response_time = t1-t0
	
	# Calculate the total response time over all trials (needed to later calculate the average response time).
	var.total_response_time += var.response_time
	
	# Calculate the average response time for this block.
	var.avg_rt = var.total_response_time / var.total_responses
	var.average_response_time = var.avg_rt
		
	# Calculate the accuracy for this block.	
	var.acc = 100. * var.total_correct / var.total_responses	
	var.accuracy = var.acc
	
	if var.acc >= 80:
		repeat = 0
	elif var.acc < 80:
		repeat = 1
	
	# Write all variables to the log file
	#log.write_vars()
	__end__
	___prepare__
	# Create a new empty canvas
	blank_canvas = canvas()
	
	# Create a new empty canvas and draw a fixation dot on it
	fixdot_canvas = canvas()
	fixdot_canvas.fixdot()
	
	# CREATE CUES
	# Create an empty canvas and draw the colour cue, which can be found in the file pool, on it in the center of the screen with 0.5 times the original size.
	cue_colour_canvas = canvas()
	path_colourcue = pool['cue_colour.png']
	cue_colour_canvas.image(path_colourcue, x=0, y=-240, scale=0.35)
	
	# Create an empty canvas and draw the shape cue, which can be found in the file pool, on it in the center of screen with 0.5 times the original size.
	cue_shape_canvas = canvas()
	path_shapecue = pool['cue_shape.png']
	cue_shape_canvas.image(path_shapecue, x=0, y=-240, scale=0.8)
	
	# CREATE STIMULI CANVASSES
	# Create multiple empty canvasses, for all possible combinations of cue and target shape
	mixed_circle_colour_canvas = canvas()
	mixed_circle_shape_canvas = canvas()
	mixed_square_colour_canvas = canvas()
	mixed_square_shape_canvas = canvas()
	
	# Draw a circle on the circle canvasses, in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	mixed_circle_colour_canvas.circle(0, 0, var.size_in_px_circle, fill=True, color=var.target_colour)
	mixed_circle_shape_canvas.circle(0, 0, var.size_in_px_circle, fill=True, color=var.target_colour)
	
	# Draw the cues on the same canvas as the circle
	mixed_circle_colour_canvas.image(path_colourcue, x=0, y=-240, scale=0.35)
	mixed_circle_shape_canvas.image(path_shapecue, x=0, y=-240, scale=0.8)
	
	# Draw a square on the square canvasses, in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	mixed_square_colour_canvas.rect(var.pos_square, var.pos_square, var.size_in_px_square, var.size_in_px_square, fill=True, color=var.target_colour)
	mixed_square_shape_canvas.rect(var.pos_square, var.pos_square, var.size_in_px_square, var.size_in_px_square, fill=True, color=var.target_colour)
	
	# Draw the cues on the same canvas as the square
	mixed_square_colour_canvas.image(path_colourcue, x=0, y=-240, scale=0.35)
	mixed_square_shape_canvas.image(path_shapecue, x=0, y=-240, scale=0.8)
	
	
	# Create new empty canvasses for the feedback and draw the feedback on them
	feedback_correct_canvas = canvas()
	feedback_correct_canvas.text('Goed')
	
	feedback_incorrect_canvas = canvas()
	feedback_incorrect_canvas.text('Fout')
	
	feedback_miss_canvas = canvas()
	feedback_miss_canvas.text('Mis')
	
	
	# Create keyboard response
	kb = keyboard(timeout=4000, keylist=['f','d','j','k'])
	__end__

define sequence mixed_block_practice_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run mixed_block_practice_trial_script always
	run jitter always
	run log always

define sketchpad mixed_experimental_break
	set start_response_interval no
	set duration 20000
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Neem nu even pauze. <br /><br />Zometeen komt de gemixte taak nog een keer. <br /><br />De taak zal automatisch verder gaan. " x=0 y=0 z_index=0

define sketchpad mixed_experimental_end
	set duration 20000
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Dit was het einde van de gemixte taak.<br /><br />U kunt nu even rusten. De taak zal automatisch verder gaan. " x=0 y=0 z_index=0

define loop mixed_experimental_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run mixed_block_experimental_sequence_1

define loop mixed_experimental_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run mixed_block_experimental_sequence_2

define loop mixed_experimental_loop_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run mixed_block_experimental_sequence_3

define sketchpad mixed_instructions_1
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="<b>Gemixte taak</b><br /><br />Tijdens deze taak worden de vorige twee taken gemixt. Soms moet u reageren op de vorm van de figuren die u ziet, en soms moet u reageren op de kleur.<br /><br />Waar u precies op moet reageren wordt aangegeven door een aanwijzing, een <u>cue</u>. <br /><br />Als u een aantal <u><b>zwarte vormpjes</u></b> ziet dan moet u op de vorm van de figuur reageren.<br /><br /><br /><br />Als u een <u><b>kleurwiel</u></b> ziet dan moet u op de kleur van de figuur reageren.<br /><br /><br /><br />Druk op een toets om door te gaan met de uitleg." x=0 y=0 z_index=0
	draw image center=1 file="cue_colour.png" scale=0.2 show_if=always x=0 y=246 z_index=0
	draw image center=1 file="cue_shape.png" scale=0.4 show_if=always x=8 y=95 z_index=0

define sketchpad mixed_instructions_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Gebruik om te reageren dezelfde toetsen als in de taken hiervoor:<br /><b><br />Als u een cirkel ziet, druk dan op de '[response_circle]'<br />Als u een vierkant ziet, druk dan op de '[response_square]'<br />Als het figuur rood is, druk dan op de '[response_red]'<br />Als het figuur groen is, druk dan op de '[response_green]'<br /></b><br />Er zal nu eerst een oefenronde komen. <br />Druk op een toets om hiermee te starten." x=0 y=0 z_index=0

define sketchpad mixed_practice_end
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Het lijkt erop dat u het onder de knie heeft. Dit is daarom het einde van de oefening. <br /><br /><br />De echte taak zal nu beginnen. Let erop dat u nu geen feedback meer zal krijgen.  <br /><br />Gebruik dezelfde toetsen als in de oefening:<br /><b><br />Druk op de '[response_circle]' als het figuur een cirkel is.<br />Druk op de '[response_square]' als het figuur een vierkant is.<br />Druk op de '[response_red]' als het figuur rood is.<br />Druk op de '[response_green]' als het figuur groen is.</b><br /><br />Druk op een toets om te starten. <br />" x=0 y=0 z_index=0

define loop mixed_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run mixed_block_practice_sequence

define inline_script mixed_repeat_practice
	set description "Executes Python code"
	___run__
	if repeat == 1: 
		exp.items["mixed_block_practice_sequence"].prepare()
		exp.items["mixed_block_practice_sequence"].run()
	#else:
	#	exp.items["mixed_end_of_practice"].prepare()
	#	exp.items["mixed_end_of_practice"].run()
	__end__
	set _prepare ""

define parallel_port_trigger_init new_parallel_port_trigger_init
	set verbose no
	set port 0x378
	set dummy_mode no
	set description "Parallel Port Trigger: initializes the parallel port device."

define parallel_port_trigger_send new_parallel_port_trigger_send_1
	set value 1
	set duration_check no
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_10
	set value 10
	set duration_check yes
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_2
	set value 2
	set duration_check yes
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_3
	set value 3
	set duration_check no
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_4
	set value 4
	set duration_check yes
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_5
	set value 5
	set duration_check no
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_6
	set value 6
	set duration_check yes
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_7
	set value 5
	set duration_check no
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_8
	set value 8
	set duration_check yes
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define parallel_port_trigger_send new_parallel_port_trigger_send_9
	set value 9
	set duration_check no
	set duration 120
	set description "Parallel Port Trigger: send trigger."

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script shape_block_experimental_determine_response
	set description "Executes Python code"
	___run__
	# Get response
	var.response, t1 = kb.get_key()
	
	
	# Determine the correct response, dependend on the target shape that is just shown
	if var.target_shape == 'circle':
		var.correct_response = var.response_circle
	else:
		var.correct_response = var.response_square
	
	
	# Add 1 to total responses, this variable is necessary to later calculate the average accuracy and average response time. 
	var.total_responses += 1
	
	# Give value 1 to the correct variable if a correct response was made and a value 0 if no or no correct response was made.
	if var.response == var.correct_response:
		var.correct = 1
		var.total_correct += 1
	else:
		var.correct = 0
	
	
	# RECORDING OF VARIABLES
	# Calculate the response time of the single trial.
	var.response_time = t1-t0
	
	# Calculate the total response time over all trials (needed to later calculate the average response time).
	var.total_response_time += var.response_time
	
	# Calculate the average response time for this block.
	var.avg_rt = var.total_response_time / var.total_responses
	var.average_response_time = var.avg_rt
		
	# Calculate the accuracy for this block.	
	var.acc = 100. * var.total_correct / var.total_responses	
	var.accuracy = var.acc
	
	
	# Write all variables to the log file
	#log.write_vars()
	__end__
	set _prepare ""

define inline_script shape_block_experimental_determine_response_2
	set description "Executes Python code"
	___run__
	# Get response
	var.response, t1 = kb.get_key()
	
	
	# Determine the correct response, dependend on the target shape that is just shown
	if var.target_shape == 'circle':
		var.correct_response = var.response_circle
	else:
		var.correct_response = var.response_square
	
	
	# Add 1 to total responses, this variable is necessary to later calculate the average accuracy and average response time. 
	var.total_responses += 1
	
	# Give value 1 to the correct variable if a correct response was made and a value 0 if no or no correct response was made.
	if var.response == var.correct_response:
		var.correct = 1
		var.total_correct += 1
	else:
		var.correct = 0
	
	
	# RECORDING OF VARIABLES
	# Calculate the response time of the single trial.
	var.response_time = t1-t0
	
	# Calculate the total response time over all trials (needed to later calculate the average response time).
	var.total_response_time += var.response_time
	
	# Calculate the average response time for this block.
	var.avg_rt = var.total_response_time / var.total_responses
	var.average_response_time = var.avg_rt
		
	# Calculate the accuracy for this block.	
	var.acc = 100. * var.total_correct / var.total_responses	
	var.accuracy = var.acc
	
	
	# Write all variables to the log file
	#log.write_vars()
	__end__
	set _prepare ""

define loop shape_block_experimental_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour green
	setcycle 1 target_shape circle
	setcycle 2 target_colour red
	setcycle 2 target_shape square
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour green
	setcycle 5 target_shape circle
	setcycle 6 target_colour red
	setcycle 6 target_shape square
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	setcycle 8 target_colour red
	setcycle 8 target_shape circle
	setcycle 9 target_colour green
	setcycle 9 target_shape circle
	setcycle 10 target_colour red
	setcycle 10 target_shape square
	setcycle 11 target_colour green
	setcycle 11 target_shape square
	setcycle 12 target_colour red
	setcycle 12 target_shape circle
	setcycle 13 target_colour green
	setcycle 13 target_shape circle
	setcycle 14 target_colour red
	setcycle 14 target_shape square
	setcycle 15 target_colour green
	setcycle 15 target_shape square
	setcycle 16 target_colour red
	setcycle 16 target_shape circle
	setcycle 17 target_colour green
	setcycle 17 target_shape circle
	setcycle 18 target_colour red
	setcycle 18 target_shape square
	setcycle 19 target_colour green
	setcycle 19 target_shape square
	setcycle 20 target_colour red
	setcycle 20 target_shape circle
	setcycle 21 target_colour green
	setcycle 21 target_shape circle
	setcycle 22 target_colour red
	setcycle 22 target_shape square
	setcycle 23 target_colour green
	setcycle 23 target_shape square
	setcycle 24 target_colour red
	setcycle 24 target_shape circle
	setcycle 25 target_colour green
	setcycle 25 target_shape circle
	setcycle 26 target_colour red
	setcycle 26 target_shape square
	setcycle 27 target_colour green
	setcycle 27 target_shape square
	setcycle 28 target_colour red
	setcycle 28 target_shape circle
	setcycle 29 target_colour green
	setcycle 29 target_shape circle
	setcycle 30 target_colour red
	setcycle 30 target_shape square
	setcycle 31 target_colour green
	setcycle 31 target_shape square
	setcycle 32 target_colour red
	setcycle 32 target_shape circle
	setcycle 33 target_colour green
	setcycle 33 target_shape circle
	setcycle 34 target_colour red
	setcycle 34 target_shape square
	setcycle 35 target_colour green
	setcycle 35 target_shape square
	run shape_block_experimental_trial_sequence

define loop shape_block_experimental_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour green
	setcycle 1 target_shape circle
	setcycle 2 target_colour red
	setcycle 2 target_shape square
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour green
	setcycle 5 target_shape circle
	setcycle 6 target_colour red
	setcycle 6 target_shape square
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	setcycle 8 target_colour red
	setcycle 8 target_shape circle
	setcycle 9 target_colour green
	setcycle 9 target_shape circle
	setcycle 10 target_colour red
	setcycle 10 target_shape square
	setcycle 11 target_colour green
	setcycle 11 target_shape square
	setcycle 12 target_colour red
	setcycle 12 target_shape circle
	setcycle 13 target_colour green
	setcycle 13 target_shape circle
	setcycle 14 target_colour red
	setcycle 14 target_shape square
	setcycle 15 target_colour green
	setcycle 15 target_shape square
	setcycle 16 target_colour red
	setcycle 16 target_shape circle
	setcycle 17 target_colour green
	setcycle 17 target_shape circle
	setcycle 18 target_colour red
	setcycle 18 target_shape square
	setcycle 19 target_colour green
	setcycle 19 target_shape square
	setcycle 20 target_colour red
	setcycle 20 target_shape circle
	setcycle 21 target_colour green
	setcycle 21 target_shape circle
	setcycle 22 target_colour red
	setcycle 22 target_shape square
	setcycle 23 target_colour green
	setcycle 23 target_shape square
	setcycle 24 target_colour red
	setcycle 24 target_shape circle
	setcycle 25 target_colour green
	setcycle 25 target_shape circle
	setcycle 26 target_colour red
	setcycle 26 target_shape square
	setcycle 27 target_colour green
	setcycle 27 target_shape square
	setcycle 28 target_colour red
	setcycle 28 target_shape circle
	setcycle 29 target_colour green
	setcycle 29 target_shape circle
	setcycle 30 target_colour red
	setcycle 30 target_shape square
	setcycle 31 target_colour green
	setcycle 31 target_shape square
	setcycle 32 target_colour red
	setcycle 32 target_shape circle
	setcycle 33 target_colour green
	setcycle 33 target_shape circle
	setcycle 34 target_colour red
	setcycle 34 target_shape square
	setcycle 35 target_colour green
	setcycle 35 target_shape square
	run shape_block_experimental_trial_sequence

define sequence shape_block_experimental_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run shape_block_trial_preparation always
	run new_parallel_port_trigger_send_1 always
	run timestamp_1 always
	run shape_block_experimental_loop_1 always
	run shape_experimental_end_1 always

define sequence shape_block_experimental_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run shape_block_trial_preparation always
	run new_parallel_port_trigger_send_1 always
	run timestamp_1 always
	run shape_block_experimental_loop_2 always
	run shape_experimental_end_2 always

define inline_script shape_block_experimental_show_stimuli
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
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	__end__

define inline_script shape_block_experimental_show_stimuli_2
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
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	__end__

define sequence shape_block_experimental_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run shape_block_experimental_show_stimuli always
	run new_parallel_port_trigger_send_2 always
	run stimtime always
	run shape_block_experimental_determine_response always
	run jitter always
	run log always

define sequence shape_block_experimental_trial_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run shape_block_experimental_show_stimuli_2 always
	run new_parallel_port_trigger_send_2 always
	run stimtime always
	run shape_block_experimental_determine_response_2 always
	run jitter always
	run log always

define loop shape_block_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 8
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_colour red
	setcycle 0 target_shape circle
	setcycle 1 target_colour green
	setcycle 1 target_shape circle
	setcycle 2 target_colour red
	setcycle 2 target_shape square
	setcycle 3 target_colour green
	setcycle 3 target_shape square
	setcycle 4 target_colour red
	setcycle 4 target_shape circle
	setcycle 5 target_colour green
	setcycle 5 target_shape circle
	setcycle 6 target_colour red
	setcycle 6 target_shape square
	setcycle 7 target_colour green
	setcycle 7 target_shape square
	run shape_block_practice_trial_sequence

define sequence shape_block_practice_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run shape_instructions always
	run reset_feedback always
	run shape_block_trial_preparation always
	run shape_block_practice_loop always
	run feedback "[accuracy]<80"
	run shape_repeat_practice always
	run shape_practice_end always

define inline_script shape_block_practice_trial_script
	set description "Executes Python code"
	___run__
	# Show the fixation dot at the center of the screen for 350 ms.
	fixdot_canvas.show()
	clock.sleep(345)
	
	# Show the blank canvas for 150 ms.
	blank_canvas.show()
	clock.sleep(145)
	
	# Show the circle canvas if the target shape is a circle (determined in stimuli list of block loop) and the square canvas if the target shape is a  square. In addition, t0 is the point at which the target is shown, from this point until the response is made is your reaction time
	if var.target_shape == 'circle':
		t0 = target_circle_canvas.show()
	else:
		t0 = target_square_canvas.show()
	
	# Determine the correct response, dependend on the target shape that is just shown
	if var.target_shape == 'circle':
		var.correct_response = var.response_circle
	else:
		var.correct_response = var.response_square
	
	# Get response
	var.response, t1 = kb.get_key()
	
	# Add 1 to total responses, this variable is necessary to later calculate the average accuracy and average response time. 
	var.total_responses += 1
	
	# Give value 1 to the correct variable if a correct response was made and a value 0 if no or no correct response was made.
	if var.response == var.correct_response:
		var.correct = 1
		var.total_correct += 1
	else:
		var.correct = 0
	
	# Show feedback, show correct feedback if response was correct and incorrect feedback if response was incorrect. Show miss feedback if participant did not respond.
	if var.correct == 1:
		feedback_correct_canvas.show()
		clock.sleep(495)
	elif var.correct == 0:
		feedback_incorrect_canvas.show()
		clock.sleep(495)
	else:
		feedback_miss_canvas.show()
		clock.sleep(495)
	
	
	# RECORDING OF VARIABLES
	# Calculate the response time of the single trial.
	var.response_time = t1-t0
	
	# Calculate the total response time over all trials (needed to later calculate the average response time).
	var.total_response_time += var.response_time
	
	# Calculate the average response time for this block.
	var.avg_rt = var.total_response_time / var.total_responses
	var.average_response_time = var.avg_rt
		
	# Calculate the accuracy for this block.	
	var.acc = 100. * var.total_correct / var.total_responses	
	var.accuracy = var.acc
	
	if var.acc >= 80:
		repeat = 0
	elif var.acc < 80:
		repeat = 1
		
	## Write all variables to the log file
	#log.write_vars()
	__end__
	___prepare__
	# Create a new empty canvas
	blank_canvas = canvas()
	
	# Create a new empty canvas and draw a fixation dot on it
	fixdot_canvas = canvas()
	fixdot_canvas.fixdot()
	
	# Create a new empty canvas and draw the targetstimuli on it
	target_circle_canvas = canvas()
	target_square_canvas = canvas()
	
	# the circle is drawn in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	target_circle_canvas.circle(0, 0, var.size_in_px_circle, fill=True, color=var.target_colour)
	# the square is drawen in the center of the screen in previously determined size and colour is dependend on the target colour (stimuli list in the loop)
	target_square_canvas.rect(var.pos_square, var.pos_square, var.size_in_px_square, var.size_in_px_square, fill=True, color=var.target_colour)
	
	# Create new empty canvasses for the feedback and draw the feedback on them
	feedback_correct_canvas = canvas()
	feedback_correct_canvas.text('Goed')
	
	feedback_incorrect_canvas = canvas()
	feedback_incorrect_canvas.text('Fout')
	
	feedback_miss_canvas = canvas()
	feedback_miss_canvas.text('Mis')
	
	
	# Create keyboard response
	kb = keyboard(timeout=4000, keylist=['f','d','j','k'])
	__end__

define sequence shape_block_practice_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run shape_block_practice_trial_script always
	run jitter always
	run log always

define inline_script shape_block_trial_preparation
	set description "Executes Python code"
	set _run ""
	___prepare__
	global jitter_list
	
	number_trials = 36
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(90)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	
	# Preparation of the variables that you want to write values to in the trial sequence. There, you add values to it and in order to be able to do so, the variable first needs to have a start value, that is wat we do here. 
	global repeat
	
	var.total_responses = 0
	var.total_response_time = 0
	var.total_correct = 0
	repeat = 0
	
	#log.write_vars()
	__end__

define inline_script shape_block_trial_preparation_1
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
	global jitter_list
	
	number_trials = 36
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(90)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	__end__

define inline_script shape_block_trial_preparation_2
	set description "Executes Python code"
	___run__
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	__end__
	___prepare__
	global jitter_list
	
	number_trials = 36
	
	## MAKE JITTER LIST
	# first create empty list
	jitter_list = list()
	# set seed to produce same list for each participant (so that the block for each participant takes even long). The random.normalvariate function chooses random numbers from a normal distribution with Mean (= duration) and SD (= jitter) for the number of trails in this block
	for trial in range(0, number_trials): 
		random.seed(90)
		jitter_list = [random.normalvariate(850,100) for trial in range(0,number_trials)]
	
	
	random.seed()
	__end__

define sketchpad shape_experimental_end_1
	set start_response_interval no
	set duration 20000
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Dit was het einde van de vorm taak.<br /><br />U kunt nu even rusten. De taak zal automatisch verder gaan. " x=0 y=0 z_index=0

define sketchpad shape_experimental_end_2
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Dit was het einde van de vorm taak.<br /><br />Druk op een toets om verder te gaan." x=0 y=0 z_index=0

define loop shape_experimental_loop_1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run shape_block_experimental_sequence_1

define loop shape_experimental_loop_2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run shape_block_experimental_sequence_2

define sketchpad shape_instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="<b>Vorm taak</b><br /><br />Tijdens deze taak moet u reageren op de <u>vorm van de figuren</u> die u ziet. <br /><b><br />Als u een cirkel ziet, druk dan op de '[response_circle]'<br />Als u een vierkant ziet, druk dan op de '[response_square]'</b><br /><br />Er zal nu eerst een oefenronde komen. <br />Druk op een toets om hiermee te starten." x=0 y=0 z_index=0

define sketchpad shape_practice_end
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color="#000000" font_bold=no font_family="Century Gothic" font_italic=no font_size=28 html=yes show_if=always text="Het lijkt erop dat u het onder de knie heeft. Dit is daarom het einde van de oefening. <br /><br /><br />De echte taak zal nu beginnen. Let erop dat u nu geen feedback meer zal krijgen. <br /><br />Gebruik dezelfde toetsen als in de oefening:<br /><b>Druk op de '[response_circle]' als het figuur een cirkel is.<br />Druk op de '[response_square]' als het figuur een vierkant is.</b><br /><br />Druk op een toets om te starten. <br />" x=0 y=0 z_index=0

define loop shape_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run shape_block_practice_sequence

define inline_script shape_repeat_practice
	set description "Executes Python code"
	___run__
	if repeat == 1:
		exp.items["shape_block_practice_sequence"].prepare() 
		exp.items["shape_block_practice_sequence"].run() 
	
	#if var.acc >= 80:
	#	exp.items["shape_end_of_practice"].prepare() 
	#	exp.items["shape_end_of_practice"].run()
		#exp.items["shape_instructions"].prepare()
		#exp.items["shape_instructions"].run()
	#else:
	#	exp.items["shape_block_sequence_experimental"].prepare()
	#	exp.items["shape_block_sequence_experimental"].run()
	__end__
	set _prepare ""

define inline_script stimtime
	set description "Executes Python code"
	___run__
	#stimulus time 50ms
	var.Trig2 = clock.time()
	clock.sleep(200)
	__end__
	set _prepare ""

define inline_script stimtime_2
	set description "Executes Python code"
	___run__
	#stimulus time 50ms
	var.Trig4 = clock.time()
	clock.sleep(200)
	__end__
	set _prepare ""

define inline_script stimtime_3
	set description "Executes Python code"
	___run__
	#stimulus time 50ms
	var.Trig6 = clock.time()
	clock.sleep(14)
	__end__
	set _prepare ""

define inline_script stimtime_4
	set description "Executes Python code"
	___run__
	#stimulus time 50ms
	var.Trig8 = clock.time()
	clock.sleep(200)
	__end__
	set _prepare ""

define inline_script stimtime_5
	set description "Executes Python code"
	___run__
	#stimulus time 50ms
	var.Trig10 = clock.time()
	clock.sleep(200)
	__end__
	set _prepare ""

define inline_script timestamp_1
	set description "Executes Python code"
	___run__
	
	global io
	trigger = 1
	port = 0x378
	try:
		io.DlPortWritePortUchar(port, trigger)
	except:
		print 'Failed to send trigger!'
		
	var.Trig1 = clock.time() 
	__end__
	set _prepare ""

define inline_script timestamp_2
	set description "Executes Python code"
	___run__
	
	global io
	trigger = 3
	port = 0x378
	try:
		io.DlPortWritePortUchar(port, trigger)
	except:
		print 'Failed to send trigger!'
		
	var.Trig3 = clock.time() 
	__end__
	set _prepare ""

define inline_script timestamp_3
	set description "Executes Python code"
	___run__
	
	global io
	trigger = 5
	port = 0x378
	try:
		io.DlPortWritePortUchar(port, trigger)
	except:
		print 'Failed to send trigger!'
		
	var.Trig5 = clock.time() 
	__end__
	set _prepare ""

define inline_script timestamp_4
	set description "Executes Python code"
	___run__
	
	global io
	trigger = 7
	port = 0x378
	try:
		io.DlPortWritePortUchar(port, trigger)
	except:
		print 'Failed to send trigger!'
		
	var.Trig7 = clock.time() 
	__end__
	set _prepare ""

define inline_script timestamp_5
	set description "Executes Python code"
	___run__
	
	global io
	trigger = 9
	port = 0x378
	try:
		io.DlPortWritePortUchar(port, trigger)
	except:
		print 'Failed to send trigger!'
		
	var.Trig9 = clock.time() 
	__end__
	set _prepare ""

